
## title: LV.bgl
## description: Lotka-Volterra predator-prey model. These parameters correspond to the
#               reaction-limited regime, and give rise to regular oscillations when simulated
#               both with ODE's and SSA.
## author: Jim Faeder
## date: 22April2015

begin parameters
 Nav 6.02e8
  V 0.5*0.5*0.01 # volume in cubic microns 
 k1 1.29e5 # 1/s
 k2 1e8  # 1/M 1/s 
 k3 1.3e5  # 1/s
end parameters

begin species
  S() 1000
  W() 500
end species

begin observables
  Molecules Stot S()
  Molecules Wtot W()
end observables

begin reaction rules
  R1: S() -> S() + S() k1
  R2: S() + W() -> W() + W() k2/(Nav*V)
  R3: W() -> 0 k3
end reaction rules


#generate_network({overwrite=>1})
visualize({type=>"regulatory",background=>1,ruleNames=>1})
#simulate({method=>"ode",t_end=>0.001,n_steps=>1000})
#simulate({method=>"ssa",t_end=>0.001,n_steps=>1000})