begin model
begin parameters
  kp1 0.01
  km1 1
  L0 100
end parameters
begin molecule types
    L(r,r)
    R(l)
end molecule types
begin species
  L(r,r) L0
  R(l) 10
end species
begin observables
  Species Lfree L(r,r)
  Molecules LR L(r,r!1).R(l!1)
  Species LRR L(r!1,r!2).R(l!1).R(l!2)
end observables
begin reaction rules
  lrbind: L(r) + R(l) <-> L(r!1).R(l!1) kp1, km1
end reaction rules
end model
generate_network({overwrite=>1})
#writeFile({format=>"net",overwrite=>1,pretty_formatting=>1,TextSpecies=>1,TextReaction=>1})
#simulate({method=>"ode",t_end=>5,n_steps=>200})
#parameter_scan({method=>"ode",t_end=>1000,n_steps=>10,parameter=>"L0",par_min=>1,par_max=>10000,n_scan_pts=>100,log_scale=>1})