begin model
begin parameters
 NaV 6.02e8 # Conversion constant: M -> #/um^3
 Vcell 1000 # Typical eukaryotic cell volume ~ 1000 um^3
 Vec   1000*Vcell # Volume of extracellular space around each cell (1/cell density)
 lig_conc 1e-8 # Ligand concentration - molar 
 L0 lig_conc*NaV*Vec # number of ligand molecules
 R0 10000 # number of receptor molecules per cell
 
 kp1 1e6/NaV # Convert forward binding rate constant for L-R to um^3/s
 km1 0.01 # Reverse binding rate constant for L-R
end parameters
begin molecule types
    L(r)
    R(l)
end molecule types
begin species
  L(r) L0
  R(l) R0
end species
begin observables
  Molecules LR L(r!1).R(l!1)
end observables
begin reaction rules
  lrbind: L(r) + R(l) <-> L(r!1).R(l!1) kp1/Vec, km1
end reaction rules
end model
simulate({method=>"ode",t_end=>200,n_steps=>200})